###
#@BQM_IS:['http://identifiers.org/biomodels.db/MODEL8679489165', 'http://identifiers.org/biomodels.db/BIOMD0000000087']
#@BQM_IS_DESCRIBED_BY:['http://identifiers.org/pubmed/17015293']
#@BQB_HAS_TAXON:['http://identifiers.org/taxonomy/4932']
#@BQB_IS_PART_OF:['http://identifiers.org/kegg.pathway/sce04111']
#@BQB_IS_VERSION_OF:['http://identifiers.org/obo.go/GO:0000075']
#@creatorEmail:'c.j.proctor@ncl.ac.uk'
#@creatorName:'Proctor Carole'
#@notes:'This is an atomized translation of an SBML model created on 12/08/2021. The original model has 55 molecules and 43 reactions. The translated model has 39 molecules and 49 rules'
###
begin model
begin parameters
	kalive 1.0
	r1_k1 0.000500
	r2_k2 0.000385
	r3_k3 0.000000
	r4_k4 0.010000
	r5_k5 0.000300
	r6_k6a 0.000050
	r7_k6b 0.000500
	r8_k7a 0.000030
	r9_k7b 0.000030
	r10_k8a 0.001000
	r11_k8b 100.000000
	r12_k8c 100.000000
	r13_k8d 0.004000
	r14_k9 100.000000
	r15_k10a 0.050000
	r16_k10b 0.050000
	r17_k11 0.000010
	r18_k12 0.000170
	r19_k13 1.000000
	r20_k14 0.000003
	r21_k15 0.200000
	r22_k16 0.100000
	r23_k17a 0.050000
	r24_k17b 0.050000
	r25_k18a 0.001000
	r26_k18b 0.000010
	r27_k19 0.001000
	r28_kc1 0.160000
	r29_kc1 0.160000
	r30_kc1 0.160000
	r31_kc1 0.160000
	r32_kc2 0.010000
	r33_kc2 0.010000
	r34_kc2 0.010000
	r35_kc2 0.010000
	r36_kc3 0.001200
	r37_kc3 0.001200
	r38_kc3 0.001200
	r39_kc3 0.001200
	r40_kc4 0.010000
	r41_kc4 0.010000
	r42_kc4 0.010000
	r43_kc4 0.010000
end parameters
begin compartments
	#volume units: L
	cellMembrane 3 1.0
	nucleus 3 1.0
end compartments
begin molecule types
	#^ bqbiol:isVersionOf obo.go:GO:0000115
	SG2off()
	#^ bqbiol:isVersionOf obo.go:GO:0000279
	M()
	#^ bqbiol:is uniprot:P38111
	Mec1()
	ExoX(a~A~0,i~I~0)
	#^ bqbiol:isVersionOf obo.go:GO:0000082
	G1Son()
	recovery()
	#^ bqbiol:isVersionOf obo.go:GO:0000115
	SG2on()
	#^ bqbiol:is uniprot:P32797
	Cdc13(utelo)
	#^ bqbiol:isVersionOf obo.go:GO:0000086
	G2Mon()
	#^ bqbiol:isVersionOf obo.chebi:CHEBI:09160, kegg.compound:C00271
	ssDNA(rpa)
	#^ bqbiol:hasVersion uniprot:P24868
	G2cyclin()
	Dun1(a~A~0,i~I~0)
	#^ bqbiol:is uniprot:P48581
	Rad17()
	#^ bqbiol:isVersionOf obo.go:GO:0031572
	G2Moff()
	SCdk(a~A~0,i~I~0)
	#^ bqbiol:is obo.chebi:CHEBI:16761
	ADP()
	#^ bqbiol:hasVersion uniprot:P20437
	G1cyclin()
	Rad9Kin()
	#^ bqbiol:isVersionOf obo.go:GO:0000087
	MG1on()
	#^ bqbiol:isVersionOf obo.go:GO:0051319
	G2()
	#^ bqbiol:isVersionOf obo.go:GO:0000781
	Utelo(cdc13)
	Rad9(a~A~0,i~I~0)
	#^ bqbiol:isVersionOf obo.go:GO:0005621
	budscar()
	Exo1(a~A~0,i~I~0)
	#^ bqbiol:isVersionOf obo.go:GO:0031575
	G1Soff()
	#^ bqbiol:isVersionOf obo.go:GO:0051318
	G1(moff~MOFF~0)
	#^ bqbiol:isVersionOf obo.go:GO:0000084
	S()
	G1Cdk(a~A~0,i~I~0)
	#^ bqbiol:is obo.chebi:CHEBI:15422
	ATP()
	#^ bqbiol:is uniprot:P32641
	Rad24()
	#^ bqbiol:hasPart uniprot:P48581, obo.go:GO:0000781
	Rad17Utelo()
	#^ bqbiol:hasPart uniprot:P38111, kegg.compound:C00271, pirsf:PIRSF002091, chebi:CHEBI:9160
	Mec1RPAssDNA()
	Rad53(a~A~0,i~I~0)
	MCdk(a~A~0,i~I~0)
	#^ bqbiol:isHomologTo uniprot:O14332
	Mcyclin()
	#^ bqbiol:hasVersion uniprot:P30283
	Scyclin()
	Chk1(a~A~0,i~I~0)
	G2Cdk(a~A~0,i~I~0)
	#^ bqbiol:isVersionOf pirsf:PIRSF002091
	RPA(ssdna,ssdna,ssdna)
end molecule types
begin seed species
	@nucleus:Utelo(cdc13!116).Cdc13(utelo!116) 64.0 #Ctelo #Ctelo
	@nucleus:Cdc13(utelo) 300.0 #Cdc13 #Cdc13
	@nucleus:Rad17() 70.0 #Rad17 #Rad17
	@nucleus:Rad24() 70.0 #Rad24 #Rad24
	@nucleus:RPA(ssdna,ssdna,ssdna) 4000.0 #RPA #RPA
	@nucleus:Mec1() 4000.0 #Mec1 #Mec1
	@nucleus:ExoX(a~0,i~I) 70.0 #ExoXI #ExoXI
	@nucleus:Exo1(a~0,i~I) 670.0 #Exo1I #Exo1I
	@nucleus:Rad9(a~0,i~I) 20.0 #Rad9I #Rad9I
	@nucleus:Rad53(a~0,i~I) 6900.0 #Rad53I #Rad53I
	@nucleus:Chk1(a~0,i~I) 60.0 #Chk1I #Chk1I
	@nucleus:Dun1(a~0,i~I) 3000.0 #Dun1I #Dun1I
	@nucleus:ATP() 10000.0 #ATP #ATP
	@nucleus:ADP() 1000.0 #ADP #ADP
	@nucleus:G1(moff~0) 1.0 #G1 #G1
	@nucleus:G1Cdk(a~0,i~I) 1.0 #G1CdkI #G1CdkI
	@nucleus:SCdk(a~0,i~I) 1.0 #SCdkI #SCdkI
	@nucleus:G2Cdk(a~0,i~I) 1.0 #G2CdkI #G2CdkI
	@nucleus:MCdk(a~0,i~I) 1.0 #MCdkI #MCdkI
	@nucleus:G1Soff() 1.0 #G1Soff #G1Soff
	@nucleus:SG2off() 1.0 #SG2off #SG2off
	@nucleus:G2Moff() 1.0 #G2Moff #G2Moff
	@nucleus:G1(moff~MOFF) 1.0 #MG1off #MG1off
end seed species
begin observables
	Species Ctelo_nucleus @nucleus:Utelo(cdc13!116).Cdc13(utelo!116) #Ctelo
	Species Utelo_nucleus @nucleus:Utelo(cdc13) #Utelo
	Species Cdc13_nucleus @nucleus:Cdc13(utelo) #Cdc13
	Species Rad17Utelo_nucleus @nucleus:Rad17Utelo() #Rad17Utelo
	Species Rad17_nucleus @nucleus:Rad17() #Rad17
	Species Rad24_nucleus @nucleus:Rad24() #Rad24
	Species RPA_nucleus @nucleus:RPA(ssdna,ssdna,ssdna) #RPA
	Species Mec1_nucleus @nucleus:Mec1() #Mec1
	Species ssDNA_nucleus @nucleus:ssDNA(rpa) #ssDNA
	Species RPAssDNA_nucleus @nucleus:RPA(ssdna!117,ssdna!118,ssdna!119).ssDNA(rpa!117).ssDNA(rpa!118).ssDNA(rpa!119) #RPAssDNA
	Species RPAssDNA1_nucleus @nucleus:RPA(ssdna!117,ssdna,ssdna).ssDNA(rpa!117) #RPAssDNA1
	Species RPAssDNA2_nucleus @nucleus:RPA(ssdna!117,ssdna!118,ssdna).ssDNA(rpa!117).ssDNA(rpa!118) #RPAssDNA2
	Species Mec1RPAssDNA_nucleus @nucleus:Mec1RPAssDNA() #Mec1RPAssDNA
	Species ExoXI_nucleus @nucleus:ExoX(a~0,i~I) #ExoXI
	Species ExoXA_nucleus @nucleus:ExoX(a~A,i~0) #ExoXA
	Species Exo1I_nucleus @nucleus:Exo1(a~0,i~I) #Exo1I
	Species Exo1A_nucleus @nucleus:Exo1(a~A,i~0) #Exo1A
	Species Rad9I_nucleus @nucleus:Rad9(a~0,i~I) #Rad9I
	Species Rad9A_nucleus @nucleus:Rad9(a~A,i~0) #Rad9A
	Species Rad53I_nucleus @nucleus:Rad53(a~0,i~I) #Rad53I
	Species Rad53A_nucleus @nucleus:Rad53(a~A,i~0) #Rad53A
	Species Chk1I_nucleus @nucleus:Chk1(a~0,i~I) #Chk1I
	Species Chk1A_nucleus @nucleus:Chk1(a~A,i~0) #Chk1A
	Species Dun1I_nucleus @nucleus:Dun1(a~0,i~I) #Dun1I
	Species Dun1A_nucleus @nucleus:Dun1(a~A,i~0) #Dun1A
	Species ATP_nucleus @nucleus:ATP() #ATP
	Species ADP_nucleus @nucleus:ADP() #ADP
	Species Rad9Kin_nucleus @nucleus:Rad9Kin() #Rad9Kin
	Species recovery_nucleus @nucleus:recovery() #recovery
	Species G1_nucleus @nucleus:G1(moff~0) #G1
	Species S_nucleus @nucleus:S() #S
	Species G2_nucleus @nucleus:G2() #G2
	Species M_nucleus @nucleus:M() #M
	Species G1cyclin_nucleus @nucleus:G1cyclin() #G1cyclin
	Species Scyclin_nucleus @nucleus:Scyclin() #Scyclin
	Species G2cyclin_nucleus @nucleus:G2cyclin() #G2cyclin
	Species Mcyclin_nucleus @nucleus:Mcyclin() #Mcyclin
	Species G1CdkI_nucleus @nucleus:G1Cdk(a~0,i~I) #G1CdkI
	Species G1CdkA_nucleus @nucleus:G1Cdk(a~A,i~0) #G1CdkA
	Species SCdkI_nucleus @nucleus:SCdk(a~0,i~I) #SCdkI
	Species SCdkA_nucleus @nucleus:SCdk(a~A,i~0) #SCdkA
	Species G2CdkI_nucleus @nucleus:G2Cdk(a~0,i~I) #G2CdkI
	Species G2CdkA_nucleus @nucleus:G2Cdk(a~A,i~0) #G2CdkA
	Species MCdkI_nucleus @nucleus:MCdk(a~0,i~I) #MCdkI
	Species MCdkA_nucleus @nucleus:MCdk(a~A,i~0) #MCdkA
	Species G1Soff_nucleus @nucleus:G1Soff() #G1Soff
	Species G1Son_nucleus @nucleus:G1Son() #G1Son
	Species SG2off_nucleus @nucleus:SG2off() #SG2off
	Species SG2on_nucleus @nucleus:SG2on() #SG2on
	Species G2Moff_nucleus @nucleus:G2Moff() #G2Moff
	Species G2Mon_nucleus @nucleus:G2Mon() #G2Mon
	Species MG1off_nucleus @nucleus:G1(moff~MOFF) #MG1off
	Species MG1on_nucleus @nucleus:MG1on() #MG1on
	Species budscar_cellMembrane @cellMembrane:budscar() #budscar
end observables
begin functions
	fRate0() = 0.0005*kalive
	fRate1() = 0.000385*kalive
	fRate2() = 1.5e-8*ATP_nucleus*Rad17_nucleus*Rad24_nucleus*Utelo_nucleus*kalive/(ATP_nucleus + 5000)
	fRate3() = 0.01*kalive
	fRate4() = 0.0003*kalive
	fRate5() = 5.0e-5*kalive
	fRate6() = 0.0005*kalive
	fRate7() = 3.0e-5*kalive
	fRate8() = 3.0e-5*kalive
	fRate9() = 0.001*kalive
	fRate10() = 100.0*kalive
	fRate11() = 100.0*kalive
	fRate12() = 0.004*kalive
	fRate13() = 100.0*kalive
	fRate14() = 0.05*kalive
	fRate15() = 0.05*kalive
	fRate16() = 1.0e-5*kalive
	fRate17() = 0.00017*kalive
	fRate18() = 1.0*kalive
	fRate19() = 3.3e-6*kalive
	fRate20() = 0.2*kalive
	fRate21() = 0.1*kalive
	fRate22() = 0.05*kalive
	fRate23() = 0.05*kalive
	fRate24() = 0.001*kalive
	fRate25() = 1.0e-5*kalive
	fRate26() = 0.001*kalive
	fRate27() = 0.16*kalive
	fRate28() = 0.16*kalive
	fRate29() = 0.16*kalive
	fRate30() = 0.16*kalive
	fRate31() = 0.01*kalive
	fRate32() = 0.01*kalive
	fRate33() = 0.01*kalive
	fRate34() = 0.01*kalive
	fRate35() = 0.0012*kalive
	fRate36() = 0.0012*kalive
	fRate37() = 0.0012*kalive
	fRate38() = 0.0012*kalive
	fRate39() = 0.01*kalive
	fRate40() = 0.01*kalive
	fRate41() = 0.01*kalive
	fRate42() = 0.01*kalive
end functions
begin reaction rules
	Capping: Cdc13(utelo)@nucleus + Utelo(cdc13)@nucleus -> Utelo(cdc13!116)@nucleus.Cdc13(utelo!116)@nucleus fRate0()
	Uncapping: Utelo(cdc13!116)@nucleus.Cdc13(utelo!116)@nucleus -> Cdc13(utelo)@nucleus + Utelo(cdc13)@nucleus fRate1()
	Rad17binding_reactants_0: 0  -> Utelo(cdc13)@nucleus -1*(fRate2())
	Rad17binding_reactants_1: 0  -> Rad17()@nucleus -1*(fRate2())
	Rad17binding_reactants_2: 0  -> Rad24()@nucleus -1*(fRate2())
	Rad17binding_reactants_3: 0  -> ATP()@nucleus -1*(fRate2())
	Rad17binding_products_0: 0  -> Rad17Utelo()@nucleus fRate2()
	Rad17binding_products_1: 0  -> Rad24()@nucleus fRate2()
	Rad17binding_products_2: 0  -> ADP()@nucleus fRate2()
	ExoXactivation: ExoX(a~0,i~I)@nucleus + Rad17Utelo()@nucleus -> ExoX(a~A,i~0)@nucleus + Rad17Utelo()@nucleus fRate3()
	ExoXactivity: ExoX(a~A,i~0)@nucleus + Rad17Utelo()@nucleus -> ExoX(a~A,i~0)@nucleus + Rad17Utelo()@nucleus + ssDNA(rpa)@nucleus fRate4()
	Exo1activation: Exo1(a~0,i~I)@nucleus -> Exo1(a~A,i~0)@nucleus fRate5()
	Exo1Rad24dependentActivation: Exo1(a~0,i~I)@nucleus + Rad24()@nucleus -> Exo1(a~A,i~0)@nucleus + Rad24()@nucleus fRate6()
	Exo1Rad17independentActivity: Utelo(cdc13)@nucleus + Exo1(a~A,i~0)@nucleus -> Utelo(cdc13)@nucleus + Exo1(a~A,i~0)@nucleus + ssDNA(rpa)@nucleus fRate7()
	Exo1Rad17dependentActivity: Rad17Utelo()@nucleus + Exo1(a~A,i~0)@nucleus -> Rad17Utelo()@nucleus + Exo1(a~A,i~0)@nucleus + ssDNA(rpa)@nucleus fRate8()
	RPAbinding1: ssDNA(rpa)@nucleus + RPA(ssdna,ssdna,ssdna)@nucleus -> RPA(ssdna!117,ssdna,ssdna)@nucleus.ssDNA(rpa!117)@nucleus fRate9()
	RPAbinding2: ssDNA(rpa)@nucleus + RPA(ssdna!117,ssdna,ssdna)@nucleus.ssDNA(rpa!117)@nucleus -> RPA(ssdna!117,ssdna!118,ssdna)@nucleus.ssDNA(rpa!117)@nucleus.ssDNA(rpa!118)@nucleus fRate10()
	RPAbinding: ssDNA(rpa)@nucleus + RPA(ssdna!117,ssdna!118,ssdna)@nucleus.ssDNA(rpa!117)@nucleus.ssDNA(rpa!118)@nucleus -> RPA(ssdna!117,ssdna!118,ssdna!119)@nucleus.ssDNA(rpa!117)@nucleus.ssDNA(rpa!118)@nucleus.ssDNA(rpa!119)@nucleus fRate11()
	Mec1binding: RPA(ssdna!117,ssdna!118,ssdna!119)@nucleus.ssDNA(rpa!117)@nucleus.ssDNA(rpa!118)@nucleus.ssDNA(rpa!119)@nucleus + Mec1()@nucleus -> Mec1RPAssDNA()@nucleus fRate12()
	Rad9activation: Rad9Kin()@nucleus + Rad9(a~0,i~I)@nucleus -> Rad9Kin()@nucleus + Rad9(a~A,i~0)@nucleus fRate13()
	ExoXinhibition: ExoX(a~A,i~0)@nucleus + Rad9(a~A,i~0)@nucleus -> ExoX(a~0,i~I)@nucleus + Rad9(a~A,i~0)@nucleus fRate14()
	ExoXinhibition2: ExoX(a~A,i~0)@nucleus + Rad9(a~0,i~I)@nucleus -> ExoX(a~0,i~I)@nucleus + Rad9(a~0,i~I)@nucleus fRate15()
	Rad53activation: Rad53(a~0,i~I)@nucleus + Rad9(a~A,i~0)@nucleus -> Rad53(a~A,i~0)@nucleus + Rad9(a~A,i~0)@nucleus fRate16()
	Chk1Activation: Chk1(a~0,i~I)@nucleus + Rad9(a~A,i~0)@nucleus -> Chk1(a~A,i~0)@nucleus + Rad9(a~A,i~0)@nucleus fRate17()
	Exo1inhibition: Exo1(a~A,i~0)@nucleus + Rad53(a~A,i~0)@nucleus -> Exo1(a~0,i~I)@nucleus + Rad53(a~A,i~0)@nucleus fRate18()
	Dun1activation: Dun1(a~0,i~I)@nucleus + Rad53(a~A,i~0)@nucleus -> Dun1(a~A,i~0)@nucleus + Rad53(a~A,i~0)@nucleus fRate19()
	Chk1cellArrest: Chk1(a~A,i~0)@nucleus + G2Mon()@nucleus -> Chk1(a~A,i~0)@nucleus + G2Moff()@nucleus fRate20()
	Dun1cellArrest: Dun1(a~A,i~0)@nucleus + G2Mon()@nucleus -> Dun1(a~A,i~0)@nucleus + G2Moff()@nucleus fRate21()
	SDNArepair1: Mec1RPAssDNA()@nucleus + S()@nucleus -> Mec1()@nucleus + RPA(ssdna,ssdna,ssdna)@nucleus + S()@nucleus + ssDNA(rpa)@nucleus + ssDNA(rpa)@nucleus + ssDNA(rpa)@nucleus fRate22()
	G2DNArepair1: G2()@nucleus + G2Moff()@nucleus + Mec1RPAssDNA()@nucleus -> G2()@nucleus + G2Moff()@nucleus + Mec1()@nucleus + RPA(ssdna,ssdna,ssdna)@nucleus + ssDNA(rpa)@nucleus + ssDNA(rpa)@nucleus + ssDNA(rpa)@nucleus fRate23()
	SDNArepair2: S()@nucleus + ssDNA(rpa)@nucleus -> S()@nucleus fRate24()
	G2DNArepair2: G2()@nucleus + G2Moff()@nucleus + ssDNA(rpa)@nucleus -> G2()@nucleus + G2Moff()@nucleus fRate25()
	Recovery: Cdc13(utelo)@nucleus + Rad17Utelo()@nucleus + recovery()@nucleus -> Utelo(cdc13!116)@nucleus.Cdc13(utelo!116)@nucleus + Rad17()@nucleus + recovery()@nucleus fRate26()
	G1cyclinSynthesis: G1(moff~0)@nucleus -> G1cyclin()@nucleus + G1(moff~0)@nucleus fRate27()
	ScyclinSynthesis: S()@nucleus -> Scyclin()@nucleus + S()@nucleus fRate28()
	G2cyclinSynthesis: G2()@nucleus -> G2cyclin()@nucleus + G2()@nucleus fRate29()
	McyclinSynthesis: M()@nucleus -> Mcyclin()@nucleus + M()@nucleus fRate30()
	G1toSGenesOn: G1Soff()@nucleus + G1(moff~0)@nucleus + G1Cdk(a~A,i~0)@nucleus -> G1Son()@nucleus + G1(moff~0)@nucleus + G1Cdk(a~A,i~0)@nucleus fRate31()
	StoG2GenesOn: SG2off()@nucleus + S()@nucleus + SCdk(a~A,i~0)@nucleus -> SG2on()@nucleus + S()@nucleus + SCdk(a~A,i~0)@nucleus fRate32()
	G2toMGenesOn: G2Moff()@nucleus + G2()@nucleus + G2Cdk(a~A,i~0)@nucleus -> G2Mon()@nucleus + G2()@nucleus + G2Cdk(a~A,i~0)@nucleus fRate33()
	MtoG1GenesOn: G1(moff~MOFF)@nucleus + M()@nucleus + MCdk(a~A,i~0)@nucleus -> MG1on()@nucleus + M()@nucleus + MCdk(a~A,i~0)@nucleus fRate34()
	G1cyclinDegradation: G1cyclin()@nucleus -> 0  fRate35()
	ScyclinDegradation: Scyclin()@nucleus -> 0  fRate36()
	G2cyclinDegradation: G2cyclin()@nucleus -> 0  fRate37()
	McyclinDegradation: Mcyclin()@nucleus -> 0  fRate38()
	G1toSProgession: G1(moff~0)@nucleus + G1Cdk(a~A,i~0)@nucleus + G1Son()@nucleus -> G1Cdk(a~0,i~I)@nucleus + G1Soff()@nucleus + S()@nucleus fRate39()
	StoG2Progession: S()@nucleus + SCdk(a~A,i~0)@nucleus + SG2on()@nucleus -> G2()@nucleus + SCdk(a~0,i~I)@nucleus + SG2off()@nucleus fRate40()
	G2toMProgession: G2()@nucleus + G2Cdk(a~A,i~0)@nucleus + G2Mon()@nucleus -> G2Cdk(a~0,i~I)@nucleus + G2Moff()@nucleus + M()@nucleus fRate41()
	MtoG1Progession: M()@nucleus + MCdk(a~A,i~0)@nucleus + MG1on()@nucleus -> budscar()@cellMembrane + G1(moff~0)@nucleus + MCdk(a~0,i~I)@nucleus + G1(moff~MOFF)@nucleus fRate42()
end reaction rules
end model
